#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace DECKLOADINGVCURRENT {
  function DoDeckLoading( variable & LabwareArray[], variable & IsUsedArray[], variable & TipsArray[], variable & DesaltingArray[], variable VacuumPlate ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function DoDeckLoading( variable & LabwareArray[], variable & IsUsedArray[], variable & TipsArray[], variable & DesaltingArray[], variable VacuumPlate ) void {
    private dialog customDialog_1;
    private variable CT;
    private variable Len;
    private variable RR;
    private variable Sets;
    private variable Carrier38_Pos1;
    private variable _PreRun_PipetteUsedIndex;
    private variable Tip50;
    private variable PlateName;
    private variable Carrier38_Pos2;
    private variable TipSlim300;
    private variable Carrier38_Pos3;
    private variable Plate;
    private variable NumLabware;
    private variable Counter;
    private variable Loading;
    private variable Carrier38_Pos4;
    private variable Carrier14_Pos1;
    private variable Carrier14_Pos2;
    private variable Carrier38_Pos5;
    private variable Carrier14_Pos3;
    private variable Carrier14_Pos4;
    private variable Carrier14_Pos5;
    private variable Volume;
    private variable FT_Ambient;
    private variable _Pipette_FTR1000Index;
    private variable Tip300;
    private variable Count;
    private variable FT_Cold;
    private variable _Pipette_FTR300SlimIndex;
    private variable EvalExpression;
    private variable Tip1000;
    private variable SizeX100_1;
    private variable _PreRun_DesaltUsedIndex;
    private variable SizeX100_2;
    private variable _Pipette_NTR300Index;
    private variable _Pipette_NTR50Index;
    private variable FindVal;
    private variable PlateList[];
    private variable Types[];
    private variable VolumeList[];
    private variable PlateNameList[];
    private variable LoadingList[];
    private variable Volumes[];
    private variable _Desalt_LoadingArray[];
    Carrier14_Pos1 = 0;
    Carrier14_Pos2 = 0;
    Carrier14_Pos3 = 0;
    Carrier14_Pos4 = 0;
    Carrier14_Pos5 = 0;
    Carrier38_Pos1 = 0;
    Carrier38_Pos2 = 0;
    Carrier38_Pos3 = 0;
    Carrier38_Pos4 = 0;
    Carrier38_Pos5 = 0;
    FT_Cold = Translate("");
    FT_Ambient = Translate("");
    CT = Translate("");
    RR = Translate("");
    SizeX100_1 = 0;
    SizeX100_2 = 0;
    if (IsUsedArray.ElementAt( _PreRun_DesaltUsedIndex -1) == "True")
    {
      Types = HSLExtensions::Array2D::GetRow(_Desalt_LoadingArray, 1);
      Volumes = HSLExtensions::Array2D::GetRow(_Desalt_LoadingArray, 2);
      Util2::Debug::TraceArray(Translate(""), Types);
      Util2::Debug::TraceArray(Translate(""), Volumes);
      Sets=Volumes.GetSize();
      if (Volumes.ElementAt( 1 -1) != "NONE")
      {
        {
          for(Count = 0; Count < Sets;)
          {
            Count = Count + 1;
            EvalExpression = StrConcat8(Types.ElementAt( Count -1), Volumes.ElementAt( Count -1), Translate("_"), Count, Translate(" = "), Translate("1"), Translate(""), Translate(""));
            TrcTrace(Translate(""), EvalExpression);
            StrEvaluateExpr(EvalExpression);
          }
        }
      }
    }
    if (IsUsedArray.ElementAt( _PreRun_PipetteUsedIndex -1) == "True")
    {
      Tip50 = TipsArray.ElementAt( _Pipette_NTR50Index -1);
      Tip300 = TipsArray.ElementAt( _Pipette_NTR300Index -1);
      TipSlim300 = TipsArray.ElementAt( _Pipette_FTR300SlimIndex -1);
      Tip1000 = TipsArray.ElementAt( _Pipette_FTR1000Index -1);
    }
    PlateList = HSLExtensions::Array2D::GetRow(LabwareArray, 1);
    LoadingList = HSLExtensions::Array2D::GetRow(LabwareArray, 4);
    VolumeList = HSLExtensions::Array2D::GetRow(LabwareArray, 5);
    PlateNameList = HSLExtensions::Array2D::GetRow(LabwareArray, 8);
    NumLabware=PlateList.GetSize();
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        Loading=LoadingList.GetAt(Counter-1);
        Plate=PlateList.GetAt(Counter-1);
        PlateName=PlateNameList.GetAt(Counter-1);
        Volume=VolumeList.GetAt(Counter-1);
        FindVal = StrFind(Loading, Translate("Carrier"));
        if (FindVal != -1)
        {
          EvalExpression = StrConcat8(Loading, Translate(" = "), Translate("\""), Plate, Translate(":                                           "), Translate(""), PlateName, Translate("\""));
          StrEvaluateExpr(EvalExpression);
        }
        else
        {
          FindVal = StrFind(Loading, Translate("C"));
          if (FindVal == 0)
          {
            EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
            EvalExpression = StrConcat2(Translate(" "), EvalExpression);
            CT = StrConcat2(CT, EvalExpression);
          }
          FindVal = StrFind(Loading, Translate("R"));
          if (FindVal == 0)
          {
            EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
            EvalExpression = StrConcat2(Translate(" "), EvalExpression);
            RR = StrConcat2(RR, EvalExpression);
          }
          FindVal = StrFind(Loading, Translate("F"));
          if (FindVal == 0)
          {
            EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
            EvalExpression = StrConcat2(Translate(" "), EvalExpression);
            FT_Ambient = StrConcat2(FT_Ambient, EvalExpression);
          }
          FindVal = StrFind(Loading, Translate("E"));
          if (FindVal == 0)
          {
            EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
            EvalExpression = StrConcat2(Translate(" "), EvalExpression);
            FT_Cold = StrConcat2(FT_Cold, EvalExpression);
          }
        }
      }
    }
    Len = StrGetLength(FT_Ambient);
    if (Len == 0)
    {
      FT_Ambient = 0;
    }
    Len = StrGetLength(FT_Cold);
    if (Len == 0)
    {
      FT_Cold = 0;
    }
    Len = StrGetLength(RR);
    if (Len == 0)
    {
      RR = 0;
    }
    Len = StrGetLength(CT);
    if (Len == 0)
    {
      CT = 0;
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock1.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock3.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock5.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock9.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock10.IsVisible", SizeX100_1 );
    customDialog_1.SetCustomDialogProperty( "textBlock11.IsVisible", TipSlim300 );
    customDialog_1.SetCustomDialogProperty( "textBlock2.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock12.IsVisible", TipSlim300 );
    customDialog_1.SetCustomDialogProperty( "textBlock17.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock4.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock6.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock7.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock8.IsVisible", TipSlim300 );
    customDialog_1.SetCustomDialogProperty( "textBlock13.IsVisible", Carrier14_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock13.Text", Carrier14_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock18.IsVisible", Carrier14_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock18.Text", Carrier14_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock19.Text", Carrier14_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock19.IsVisible", Carrier14_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock20.IsVisible", Carrier14_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock20.Text", Carrier14_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock21.Text", Carrier14_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock21.IsVisible", Carrier14_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock24.Text", Carrier38_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock24.IsVisible", Carrier38_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock25.Text", Carrier38_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock25.IsVisible", Carrier38_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock37.IsVisible", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock37.Text", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock40.IsVisible", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock40.Text", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock41.IsVisible", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock41.Text", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock42.IsVisible", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock44.Text", VacuumPlate );
    customDialog_1.SetCustomDialogProperty( "textBlock44.IsVisible", VacuumPlate );
    customDialog_1.SetCustomDialogProperty( "textBlock22.IsVisible", Carrier38_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock22.Text", Carrier38_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock23.IsVisible", Carrier38_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock23.Text", Carrier38_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock26.IsVisible", Carrier38_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock26.Text", Carrier38_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock38.IsVisible", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock39.IsVisible", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock46.IsVisible", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock47.IsVisible", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock47.Text", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock51.IsVisible", SizeX100_2 );
    customDialog_1.ShowCustomDialog();
  }
} // library namespace
