#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace HEATER_CONFIG {
  variable PlateSequences[];
  variable HeaterTypes[];
  variable LidSequences[];
  variable ComPorts[];
  variable HeaterIDs[];
  variable AmbientTemp;
  variable TempDelta;
  variable AssociatedPlateTypes[];
  variable SupportedPlateTypes[];
  private function EDIT_Configuration(  ) void ;
  function GetAmbientTemp(  ) variable ;
  function GetAssociatedPlateTypes( variable & o_AssociatedPlateTypes[] ) void ;
  function GetComPorts( variable & o_ComPorts[] ) void ;
  function GetHeaterIDs( variable & o_HeaterIDs[] ) void ;
  function GetHeaterTypes( variable & o_HeaterTypes[] ) void ;
  function GetLidSequenceStrings( variable & o_LidSequenceStrings[] ) void ;
  function GetNumHeaters(  ) variable ;
  function GetPlateSequenceStrings( variable & o_PlateSequenceStrings[] ) void ;
  function GetSupportedPlateTypes( variable & o_SupportedPlateTypes[] ) void ;
  function GetTempDelta(  ) variable ;
  function Init(  ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  private function EDIT_Configuration(  ) void {
    AmbientTemp = Translate("20");
    TempDelta = Translate("2");
    ComPorts.SetSize(0);
    ComPorts.AddAsLast(Translate("1"));
    ComPorts.AddAsLast(Translate("2"));
    HeaterIDs.SetSize(0);
    HeaterIDs.AddAsLast(Translate("Heater 1"));
    HeaterIDs.AddAsLast(Translate("Heater 2"));
    HeaterTypes.SetSize(0);
    HeaterTypes.AddAsLast(Translate("HeaterShaker"));
    HeaterTypes.AddAsLast(Translate("HeaterShaker"));
    SupportedPlateTypes = HSLExtensions::Array2D::Create(2, 3);
    HSLExtensions::Array2D::InitializeAllValues(SupportedPlateTypes, Translate(""));
    HSLExtensions::Array2D::SetValue(SupportedPlateTypes, 1, 1, Translate("200uL Biorad 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(SupportedPlateTypes, 1, 2, Translate("400uL Thermo 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(SupportedPlateTypes, 1, 3, Translate("1200uL DeepWell 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(SupportedPlateTypes, 2, 1, Translate("200uL Biorad 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(SupportedPlateTypes, 2, 2, Translate("400uL Thermo 96 Well PCR Plate"));
    HSLExtensions::Array2D::SetValue(SupportedPlateTypes, 2, 3, Translate("1200uL DeepWell 96 Well PCR Plate"));
    AssociatedPlateTypes = HSLExtensions::Array2D::Create(2, 3);
    HSLExtensions::Array2D::InitializeAllValues(AssociatedPlateTypes, Translate(""));
    HSLExtensions::Array2D::SetValue(AssociatedPlateTypes, 1, 1, Translate("200uL Biorad 96 Well PCR Plate Heater"));
    HSLExtensions::Array2D::SetValue(AssociatedPlateTypes, 1, 2, Translate("400uL Thermo 96 Well PCR Plate Heater"));
    HSLExtensions::Array2D::SetValue(AssociatedPlateTypes, 1, 3, Translate("1200uL DeepWell 96 Well PCR Plate Heater"));
    HSLExtensions::Array2D::SetValue(AssociatedPlateTypes, 2, 1, Translate("200uL Biorad 96 Well PCR Plate Heater"));
    HSLExtensions::Array2D::SetValue(AssociatedPlateTypes, 2, 2, Translate("400uL Thermo 96 Well PCR Plate Heater"));
    HSLExtensions::Array2D::SetValue(AssociatedPlateTypes, 2, 3, Translate("1200uL DeepWell 96 Well PCR Plate Heater"));
    LidSequences = HSLExtensions::Array2D::Create(2, 3);
    HSLExtensions::Array2D::InitializeAllValues(LidSequences, Translate(""));
    HSLExtensions::Array2D::SetValue(LidSequences, 1, 1, Translate("_HHS1_Lid_200uL"));
    HSLExtensions::Array2D::SetValue(LidSequences, 1, 2, Translate("_HHS1_Lid_400uL"));
    HSLExtensions::Array2D::SetValue(LidSequences, 1, 3, Translate("_HHS1_Lid_1200uL"));
    HSLExtensions::Array2D::SetValue(LidSequences, 2, 1, Translate("_HHS2_Lid_200uL"));
    HSLExtensions::Array2D::SetValue(LidSequences, 2, 2, Translate("_HHS2_Lid_400uL"));
    HSLExtensions::Array2D::SetValue(LidSequences, 2, 3, Translate("_HHS2_Lid_1200uL"));
    PlateSequences = HSLExtensions::Array2D::Create(2, 3);
    HSLExtensions::Array2D::InitializeAllValues(PlateSequences, Translate(""));
    HSLExtensions::Array2D::SetValue(PlateSequences, 1, 1, Translate("_HHS1_96WellPCRPlate200uL"));
    HSLExtensions::Array2D::SetValue(PlateSequences, 1, 2, Translate("_HHS1_96WellPCRPlate400uL"));
    HSLExtensions::Array2D::SetValue(PlateSequences, 1, 3, Translate("_HHS1_96WellPCRPlate1200uL"));
    HSLExtensions::Array2D::SetValue(PlateSequences, 2, 1, Translate("_HHS2_96WellPCRPlate200uL"));
    HSLExtensions::Array2D::SetValue(PlateSequences, 2, 2, Translate("_HHS2_96WellPCRPlate400uL"));
    HSLExtensions::Array2D::SetValue(PlateSequences, 2, 3, Translate("_HHS2_96WellPCRPlate1200uL"));
  }

  function GetComPorts( variable & o_ComPorts[] ) void {
    o_ComPorts.SetSize( 0);
    o_ComPorts=ComPorts;
  }

  function GetHeaterTypes( variable & o_HeaterTypes[] ) void {
    o_HeaterTypes.SetSize( 0);
    o_HeaterTypes=HeaterTypes;
  }

  function GetSupportedPlateTypes( variable & o_SupportedPlateTypes[] ) void {
    o_SupportedPlateTypes.SetSize( 0);
    o_SupportedPlateTypes=SupportedPlateTypes;
  }

  function GetPlateSequenceStrings( variable & o_PlateSequenceStrings[] ) void {
    o_PlateSequenceStrings.SetSize( 0);
    o_PlateSequenceStrings=PlateSequences;
  }

  function GetLidSequenceStrings( variable & o_LidSequenceStrings[] ) void {
    o_LidSequenceStrings.SetSize( 0);
    o_LidSequenceStrings=LidSequences;
  }

  function GetHeaterIDs( variable & o_HeaterIDs[] ) void {
    o_HeaterIDs.SetSize( 0);
    o_HeaterIDs=HeaterIDs;
  }

  function Init(  ) void {
    EDIT_Configuration();
  }

  function GetAmbientTemp(  ) variable {
    return (AmbientTemp);
  }

  function GetNumHeaters(  ) variable {
    private variable NumHeaters;
    NumHeaters=HeaterIDs.GetSize();
    return (NumHeaters);
  }

  function GetTempDelta(  ) variable {
    return (TempDelta);
  }

  function GetAssociatedPlateTypes( variable & o_AssociatedPlateTypes[] ) void {
    o_AssociatedPlateTypes.SetSize( 0);
    o_AssociatedPlateTypes=AssociatedPlateTypes;
  }
} // library namespace
