#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\HHS HHC\\Configuration\\HHS HHC Config.hs_"
#include "HSLTrcLib.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl"
#include "HSLStrLib.hsl"
#include "HSLExtensions\\Array2D.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Tools\\Tools.hs_"
#include "HSLUtilLib2.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace HEATER {
  variable HeaterReservations[];
  variable HeaterHandles[];
  function AcquireReservation( variable PlateName, variable PlateType, variable Temp, variable RPM ) variable ;
  function CheckReservation( variable PlateName ) variable ;
  function ConfirmReservation( variable PlateName, variable Temp ) variable ;
  function EndReservation( variable PlateName ) void ;
  function GetReservationLidSequenceString( variable PlateName, variable PlateType ) variable ;
  function GetReservationPlateSequenceString( variable PlateName, variable PlateType ) variable ;
  function Init(  ) void ;
  function ReleaseReservation( variable PlateName ) void ;
  function StartReservation( variable PlateName, variable Temp, variable RPM ) void ;
  function _InitLibrary() {
    HHS_HHC_CONFIG::_InitLibrary();
    TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    HHS_HHC_CONFIG::_ExitLibrary();
    TOOLS::_ExitLibrary();
  }

  function Init(  ) void {
    private variable NumHeaters;
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable ComPorts[];
    private variable Counter;
    private variable ComPort;
    private variable TempArray[];
    MECC::TraceComment(Translate("HHS HHC module initialization beginning"));
    HHS_HHC_CONFIG::Init();
    HHS_HHC_CONFIG::GetComPorts(ComPorts);
    HHS_HHC_CONFIG::GetHeaterIDs(HeaterIDs);
    HHS_HHC_CONFIG::GetHeaterTypes(HeaterTypes);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    TrcTrace4(Translate("There are "), NumHeaters, Translate(" Heaters to initialize."), Translate(""));
    HeaterReservations.SetSize(NumHeaters);
    HeaterHandles.SetSize(NumHeaters);
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        HeaterReservations.SetAt(Counter-1, Translate(""));
        if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
        {
          MECC::TraceComment(Translate("Attempting HeaterShaker initialization"));
          ComPort = StrIVal(ComPorts.ElementAt( Counter -1));
          HSLHamHeaterShaker::CreateUsbDevice(ComPort, HeaterHandles.ElementAt( Counter -1));
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 1);
          HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
          TrcTrace8(Translate("Heater #"), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1), Translate(" was successfully initialized as a HeaterShaker."), Translate(""));
        }
        else
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            MECC::TraceComment(Translate("Attempting HeaterCooler initialization"));
            HamiltonHeaterCooler::Connect(ComPorts.ElementAt( Counter -1), 5, 0, TempArray);
            HeaterHandles.SetAt(Counter-1, TempArray.ElementAt( 1 -1));
            TrcTrace8(Translate("Heater #"), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1), Translate(" was successfully initialized as a HeaterCooler."), Translate(""));
          }
          else
          {
            MECC::TraceComment(Translate("HHS HHC HeaterType was not found. Acceptable values are HeaterShaker and HeaterCooler"));
            TrcTrace(Translate("Failed Heater Type: "), HeaterTypes.ElementAt( Counter -1));
            TrcTrace(Translate("Failed Heater Index: "), Counter);
            abort;
          }
        }
      }
    }
    MECC::TraceComment(Translate("HHS HHC module initialization succeeded"));
  }

  function AcquireReservation( variable PlateName, variable PlateType, variable Temp, variable RPM ) variable {
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    private variable Counter;
    private variable NumHeaters;
    private variable PlateTypes[];
    private variable Shake;
    private variable HeatCool;
    private variable AmbientTemp;
    private variable ReturnValue;
    private variable PlateTypesArray[];
    private variable CurrentTemp;
    private variable BestHeater;
    private variable TempDifference;
    private variable HistoricalTempDifference;
    HHS_HHC_CONFIG::GetHeaterIDs(HeaterIDs);
    HHS_HHC_CONFIG::GetHeaterTypes(HeaterTypes);
    HHS_HHC_CONFIG::GetPlateTypes(PlateTypes);
    HHS_HHC_CONFIG::GetAmbientTemp(AmbientTemp);
    RPM = StrFVal(RPM);
    AmbientTemp = StrFVal(AmbientTemp);
    if (RPM == 0)
    {
      if (Temp == "")
      {
        TrcTrace(Translate("Incubation is at ambient without shaking so no heater is required"), Translate(""));
        return (Translate("True"));
      }
    }
    else
    {
      if (Temp == "")
      {
        Temp = AmbientTemp;
      }
    }
    Temp = StrFVal(Temp);
    HistoricalTempDifference = 9999;
    BestHeater = 0;
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        CurrentTemp = 9999;
        if (HeaterReservations.ElementAt( Counter -1) == "")
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          ReturnValue = TOOLS::IsInArray(PlateType, PlateTypesArray);
          if (ReturnValue == "True")
          {
            if (RPM == 0)
            {
              if (Temp >= AmbientTemp)
              {
                if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
                {
                  HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
                }
              }
              if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
              {
                HamiltonHeaterCooler::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
              }
            }
            else
            {
              if (Temp >= AmbientTemp)
              {
                if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
                {
                  HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
                }
              }
            }
            if (CurrentTemp != 9999)
            {
              if (CurrentTemp > Temp)
              {
                TempDifference = CurrentTemp - Temp;
              }
              else
              {
                TempDifference = Temp - CurrentTemp;
              }
              if (TempDifference < HistoricalTempDifference)
              {
                HistoricalTempDifference = TempDifference;
                BestHeater = Counter;
              }
            }
          }
        }
      }
    }
    if (BestHeater == 0)
    {
      MECC::TraceComment(Translate("There was not a heater available for this reservation... Please try again after an incubation ends."));
      return (Translate("False"));
    }
    else
    {
      HeaterReservations[ BestHeater -1] = PlateName;
      if (HeaterTypes.ElementAt( BestHeater -1) == "HeaterShaker")
      {
        HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( BestHeater -1), Temp, 0);
      }
      if (HeaterTypes.ElementAt( BestHeater -1) == "HeaterCooler")
      {
        HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( BestHeater -1), 0, 100, Temp, 0, 0);
      }
      TrcTrace8(Translate("Heater # "), BestHeater, Translate(" with ID "), HeaterIDs.ElementAt( BestHeater -1), Translate(" and type "), HeaterTypes.ElementAt( BestHeater -1), Translate(" was reserved for plate "), PlateName);
      return (Translate("True"));
    }
  }

  function ReleaseReservation( variable PlateName ) void {
    private variable NumHeaters;
    private variable Counter;
    private variable HeaterTypes[];
    private variable HeaterIDs[];
    HHS_HHC_CONFIG::GetHeaterTypes(HeaterTypes);
    HHS_HHC_CONFIG::GetHeaterIDs(HeaterIDs);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          HeaterReservations.SetAt(Counter-1, Translate(""));
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
          }
          TrcTrace8(Translate("Reservation was released for "), PlateName, Translate(" on heater # "), Counter, Translate(" with ID "), HeaterIDs.ElementAt( Counter -1), Translate(" and type "), HeaterTypes.ElementAt( Counter -1));
          break;
        }
      }
    }
  }

  function GetReservationPlateSequenceString( variable PlateName, variable PlateType ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable NumPlateTypes;
    private variable Counter2;
    private variable PlateSequenceStringsArray[];
    private variable PlateTypes[];
    private variable PlateSequenceStrings[];
    private variable PlateTypesArray[];
    private variable ReturnVal;
    HHS_HHC_CONFIG::GetPlateTypes(PlateTypes);
    HHS_HHC_CONFIG::GetPlateSequenceStrings(PlateSequenceStrings);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          PlateSequenceStringsArray = HSLExtensions::Array2D::GetColumn(PlateSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = PlateSequenceStringsArray.ElementAt( Counter2 -1);
                return (ReturnVal);
              }
            }
          }
        }
      }
    }
    return (Translate("False"));
  }

  function GetReservationLidSequenceString( variable PlateName, variable PlateType ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable NumPlateTypes;
    private variable ReturnVal;
    private variable Counter2;
    private variable PlateTypes[];
    private variable PlateTypesArray[];
    private variable LidSequenceStrings[];
    private variable LidSequenceStringsArray[];
    HHS_HHC_CONFIG::GetPlateTypes(PlateTypes);
    HHS_HHC_CONFIG::GetLidSequenceStrings(LidSequenceStrings);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          PlateTypesArray = HSLExtensions::Array2D::GetColumn(PlateTypes, Counter);
          LidSequenceStringsArray = HSLExtensions::Array2D::GetColumn(LidSequenceStrings, Counter);
          NumPlateTypes=PlateTypesArray.GetSize();
          {
            for(Counter2 = 0; Counter2 < NumPlateTypes;)
            {
              Counter2 = Counter2 + 1;
              if (PlateType == PlateTypesArray.ElementAt( Counter2 -1))
              {
                ReturnVal = LidSequenceStringsArray.ElementAt( Counter2 -1);
                return (ReturnVal);
              }
            }
          }
        }
      }
    }
    return (Translate("False"));
  }

  function StartReservation( variable PlateName, variable Temp, variable RPM ) void {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    HHS_HHC_CONFIG::GetHeaterTypes(HeaterTypes);
    RPM = StrFVal(RPM);
    Temp = StrFVal(Temp);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( Counter -1), Temp, 0);
            if (RPM > 0)
            {
              HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 1);
              HSLHamHeaterShaker::StartShaker(HeaterHandles.ElementAt( Counter -1), RPM);
            }
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
            HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( Counter -1), 0, 100, Temp, 0, 0);
          }
        }
      }
    }
  }

  function EndReservation( variable PlateName ) void {
    private variable Counter;
    private variable NumHeaters;
    private variable HeaterTypes[];
    HHS_HHC_CONFIG::GetHeaterTypes(HeaterTypes);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::SetPlateLock(HeaterHandles.ElementAt( Counter -1), 0);
            HSLHamHeaterShaker::StopShaker(HeaterHandles.ElementAt( Counter -1));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
          }
        }
      }
    }
  }

  function ConfirmReservation( variable PlateName, variable Temp ) variable {
    private variable Counter;
    private variable NumHeaters;
    private variable TempDifference;
    private variable CurrentTemp;
    private variable HeaterTypes[];
    HHS_HHC_CONFIG::GetHeaterTypes(HeaterTypes);
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          Temp = StrFVal(Temp);
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::GetTemperature(HeaterHandles.ElementAt( Counter -1), CurrentTemp);
          }
          if (CurrentTemp > Temp)
          {
            TempDifference = CurrentTemp - Temp;
          }
          else
          {
            TempDifference = Temp - CurrentTemp;
          }
          if (TempDifference <= 2)
          {
            return (Translate("True"));
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterShaker")
          {
            HSLHamHeaterShaker::StopTempCtrl(HeaterHandles.ElementAt( Counter -1));
            HSLHamHeaterShaker::StartTempCtrl(HeaterHandles.ElementAt( Counter -1), Temp, 0);
          }
          if (HeaterTypes.ElementAt( Counter -1) == "HeaterCooler")
          {
            HamiltonHeaterCooler::StopTemperatureControl(HeaterHandles.ElementAt( Counter -1));
            HamiltonHeaterCooler::SetTemperature(HeaterHandles.ElementAt( Counter -1), 0, 100, Temp, 0, 0);
          }
          return (Translate("False"));
        }
      }
    }
    return (Translate("True"));
  }

  function CheckReservation( variable PlateName ) variable {
    private variable Counter;
    private variable NumHeaters;
    NumHeaters = HHS_HHC_CONFIG::GetNumHeaters();
    {
      for(Counter = 0; Counter < NumHeaters;)
      {
        Counter = Counter + 1;
        if (PlateName == HeaterReservations.ElementAt( Counter -1))
        {
          return (Translate("True"));
        }
      }
    }
    return (Translate("False"));
  }
} // library namespace
