#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "Pipette Config Liquid Classes.hs_"
#include "Pipette Config Plate Equations.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace PIPETTE_CONFIG {
  variable NumChannels;
  variable ChannelString;
  variable TipSequenceStrings[];
  variable TipSequenceVolumes[];
  variable TipSequenceTypes[];
  variable CoreGripToolSequenceString;
  variable TipSequenceWasteSequenceString[];
  variable MaxPipettingVolume;
  variable FlipTubeToolSequenceString;
  variable TipSequenceCounterStrings[];
  function EDIT_Configuration(  ) void ;
  function EDIT_TipsDialog( variable & TipNumbers2DArray[] ) void ;
  function GetChannelString(  ) variable ;
  function GetCoreGripToolSequenceString(  ) variable ;
  function GetFlipTubeToolSequenceString(  ) variable ;
  function GetMaxPipettingVolume(  ) variable ;
  function GetNumChannels(  ) variable ;
  function GetTipSequenceCounterStrings( variable & o_TipCounterStrings[] ) void ;
  function GetTipSequenceStrings( variable & o_TipSequenceStringsArray[] ) void ;
  function GetTipSequenceTypes( variable & o_TipSequenceTypesArray[] ) void ;
  function GetTipSequenceVolumes( variable & o_TipSequenceVolumesArray[] ) void ;
  function GetTipSequenceWasteSequenceStrings( variable & o_TipSequenceWasteSequenceStrings[] ) void ;
  function Init(  ) void ;
  function _InitLibrary() {
    PIPETTE_CONFIG_LIQUID_CLASSES::_InitLibrary();
    PIPETTE_CONFIG_PLATE_EQUATIONS::_InitLibrary();
  }
  function _ExitLibrary() {
    PIPETTE_CONFIG_LIQUID_CLASSES::_ExitLibrary();
    PIPETTE_CONFIG_PLATE_EQUATIONS::_ExitLibrary();
  }

  function Init(  ) void {
    EDIT_Configuration();
    PIPETTE_CONFIG_LIQUID_CLASSES::EDIT_ConfigurationLiquidClasses();
    PIPETTE_CONFIG_PLATE_EQUATIONS::EDIT_ConfigurationPlateEquations();
  }

  function GetNumChannels(  ) variable {
    return (NumChannels);
  }

  function GetChannelString(  ) variable {
    return (ChannelString);
  }

  function GetTipSequenceStrings( variable & o_TipSequenceStringsArray[] ) void {
    o_TipSequenceStringsArray.SetSize( 0);
    o_TipSequenceStringsArray=TipSequenceStrings;
  }

  function GetTipSequenceVolumes( variable & o_TipSequenceVolumesArray[] ) void {
    o_TipSequenceVolumesArray.SetSize( 0);
    o_TipSequenceVolumesArray=TipSequenceVolumes;
  }

  function GetTipSequenceTypes( variable & o_TipSequenceTypesArray[] ) void {
    o_TipSequenceTypesArray.SetSize( 0);
    o_TipSequenceTypesArray=TipSequenceTypes;
  }

  function GetTipSequenceWasteSequenceStrings( variable & o_TipSequenceWasteSequenceStrings[] ) void {
    o_TipSequenceWasteSequenceStrings.SetSize( 0);
    o_TipSequenceWasteSequenceStrings=TipSequenceWasteSequenceString;
  }

  function GetCoreGripToolSequenceString(  ) variable {
    return (CoreGripToolSequenceString);
  }

  function EDIT_TipsDialog( variable & TipNumbers2DArray[] ) void {
    private variable FTR300;
    private variable NTR50;
    private variable NTR300;
    private variable FTR1000;
    private dialog customDialog_1;
    private variable NumItems;
    private variable Counter;
    private variable NumbersArray[];
    private variable SequenceStringsArray[];
    private variable FTR50;
    private variable FTR100;
    FTR50 = 0;
    FTR300 = 0;
    FTR1000 = 0;
    SequenceStringsArray = HSLExtensions::Array2D::GetColumn(TipNumbers2DArray, 1);
    NumbersArray = HSLExtensions::Array2D::GetColumn(TipNumbers2DArray, 2);
    NumItems=SequenceStringsArray.GetSize();
    {
      for(Counter = 0; Counter < NumItems;)
      {
        Counter = Counter + 1;
        if (SequenceStringsArray.ElementAt( Counter -1) == "_Seq_FTR50uLTips")
        {
          FTR50 = NumbersArray.ElementAt( Counter -1);
        }
        if (SequenceStringsArray.ElementAt( Counter -1) == "_Seq_FTR300uLTips")
        {
          FTR300 = NumbersArray.ElementAt( Counter -1);
        }
        if (SequenceStringsArray.ElementAt( Counter -1) == "_Seq_FTR1000uLTips")
        {
          FTR1000 = NumbersArray.ElementAt( Counter -1);
        }
      }
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "Tip50.Text", FTR50 );
    customDialog_1.SetCustomDialogProperty( "Tip300.Text", FTR300 );
    customDialog_1.SetCustomDialogProperty( "Slim300.Text", FTR1000 );
    customDialog_1.ShowCustomDialog();
  }

  function GetMaxPipettingVolume(  ) variable {
    return (MaxPipettingVolume);
  }

  function GetFlipTubeToolSequenceString(  ) variable {
    return (FlipTubeToolSequenceString);
  }

  function EDIT_Configuration(  ) void {
    NumChannels = 8;
    ChannelString = Translate("11111111");
    MaxPipettingVolume = 0;
    CoreGripToolSequenceString = Translate("False");
    FlipTubeToolSequenceString = Translate("False");
    TipSequenceStrings.SetSize(0);
    TipSequenceStrings.AddAsLast(Translate("_Seq_FTR50uLTips"));
    TipSequenceStrings.AddAsLast(Translate("_Seq_FTR300uLTips"));
    TipSequenceStrings.AddAsLast(Translate("_Seq_FTR1000uLTips"));
    TipSequenceTypes.SetSize(0);
    TipSequenceTypes.AddAsLast(Translate("FTR"));
    TipSequenceTypes.AddAsLast(Translate("FTR"));
    TipSequenceTypes.AddAsLast(Translate("FTR"));
    TipSequenceWasteSequenceString.SetSize(0);
    TipSequenceWasteSequenceString.AddAsLast(Translate("False"));
    TipSequenceWasteSequenceString.AddAsLast(Translate("False"));
    TipSequenceWasteSequenceString.AddAsLast(Translate("False"));
    TipSequenceVolumes.SetSize(0);
    TipSequenceVolumes.AddAsLast(50);
    TipSequenceVolumes.AddAsLast(300);
    TipSequenceVolumes.AddAsLast(1000);
    TipSequenceCounterStrings.SetSize(0);
    TipSequenceCounterStrings.AddAsLast(Translate("TipCounterFTR50"));
    TipSequenceCounterStrings.AddAsLast(Translate("TipCounterFTR300"));
    TipSequenceCounterStrings.AddAsLast(Translate("TipCounterFTR1000"));
  }

  function GetTipSequenceCounterStrings( variable & o_TipCounterStrings[] ) void {
    o_TipCounterStrings.SetSize( 0);
    o_TipCounterStrings=TipSequenceCounterStrings;
  }
} // library namespace
