#pragma once
#include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl"
#include "VirtualLabware_V2.hsl"
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Configuration\\Pipette Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLUtilLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace PIPETTE {
  global variable x;
  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable ;
  function DoTipLoading(  ) void ;
  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void ;
  function Init(  ) void ;
  function MeasureWellVolume(  ) void ;
  function TransferLiquid(  ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    PIPETTE_CONFIG::_InitLibrary();
    SCRIPT::_InitLibrary();
    TOOLS::_InitLibrary();
  }
  function _ExitLibrary() {
    PIPETTE_CONFIG::_ExitLibrary();
    SCRIPT::_ExitLibrary();
    TOOLS::_ExitLibrary();
  }

  function Init(  ) void {
    SCRIPT::Init();
    PIPETTE_CONFIG::Init();
  }

  function DoTipLoading(  ) void {
  }

  function MeasureWellVolume(  ) void {
  }

  function TransferLiquid(  ) void {
  }

  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void {
    private variable ret_TipToolError;
    if (int_FlipTubeFunction == 1)
    {
      MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
      FLIPTUBETOOL::Initialize(0);
    }
    if (int_FlipTubeFunction == 2)
    {
      MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
      if (ret_TipToolError == 0)
      {
        TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 3)
    {
      MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 4)
    {
      MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
  }

  private function CalculateVolumeHeights( variable & i_PlateTypes[], variable & i_Volumes[], variable & o_CalculatedHeights[] ) variable {
    private variable NumPlateTypes;
    private variable SegmentCount;
    private variable Counter;
    private variable HeightCalcHeight;
    private variable Counter2;
    private variable Counter3;
    private variable CalculatedSegmentVolume;
    private variable Segments;
    private variable HeightCalcIncrement;
    private variable SegmentHeight;
    private variable HeightCalcMultiplier;
    private variable CalculatedVolume;
    private variable SegmentHeights[];
    private variable PlateTypes[];
    private variable SegmentEquationsArray[];
    private variable NumSegments[];
    private variable SegmentHeightsArray[];
    private variable SegmentEquations[];
    private variable PythonArguments;
    private variable Num;
    private variable SegmentArgs;
    private variable ScriptRoot;
    private variable ExecutablePath;
    private variable ScriptPath;
    private variable Exit;
    private variable OutputFile;
    private variable Height;
    private variable FileHandle;
    private variable InputFile;
    private variable PathRoot;
    private file File;
    private variable Command_Base;
    private variable ScriptRootPath;
    private variable PythonRootPath;
    private variable FinalScript;
    private variable Start_Pos;
    private variable RunType;
    private variable Excel_File_Path;
    private variable NumInputPlateTypes;
    private variable Temp;
    private variable MatchedTypeIndexes[];
    private variable MatchedTypes[];
    private variable NumVolumes;
    private variable NumMatched;
    private variable MxaSegments;
    private variable MaxSegments;
    private variable Index;
    private variable PlateTypeSegments[];
    private variable Equations[];
    private variable Equation;
    private variable ParamsString;
    private variable CalculatedHeightsString;
    private variable RootPath;
    private variable PythonScript;
    private variable RunnableCommand;
    private variable _Temp;
    private variable Heights;
    PIPETTE_CONFIG::GetPlateTypes(PlateTypes);
    PIPETTE_CONFIG::GetNumSegments(NumSegments);
    PIPETTE_CONFIG::GetSegmentHeights(SegmentHeights);
    PIPETTE_CONFIG::GetSegmentEquations(SegmentEquations);
    NumInputPlateTypes=i_PlateTypes.GetSize();
    NumPlateTypes=PlateTypes.GetSize();
    MatchedTypeIndexes.SetSize(0);
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumPlateTypes;)
          {
            Counter2 = Counter2 + 1;
            if (i_PlateTypes.ElementAt( Counter -1) == PlateTypes.ElementAt( Counter2 -1))
            {
              MatchedTypeIndexes.AddAsLast(Counter2);
            }
          }
        }
      }
    }
    NumMatched=MatchedTypeIndexes.GetSize();
    if (NumMatched != NumInputPlateTypes)
    {
      return (Translate("False"));
    }
    PlateTypeSegments.SetSize(0);
    MaxSegments = 0;
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        Segments = StrIVal(Segments);
        if (Segments > MaxSegments)
        {
          MaxSegments = Segments;
        }
        PlateTypeSegments.AddAsLast(Segments);
      }
    }
    ParamsString = Translate("");
    {
      for(Counter = 0; Counter < NumInputPlateTypes;)
      {
        Counter = Counter + 1;
        Index = MatchedTypeIndexes.ElementAt( Counter -1);
        Segments = NumSegments.ElementAt( Index -1);
        ParamsString = StrConcat12(ParamsString, Translate(""), i_Volumes.ElementAt( Counter -1), Translate(","), Segments, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        Segments = StrIVal(Segments);
        {
          for(Counter2 = 0; Counter2 < Segments;)
          {
            Counter2 = Counter2 + 1;
            Equation = HSLExtensions::Array2D::GetValue(SegmentEquations, Index, Counter2);
            Height = HSLExtensions::Array2D::GetValue(SegmentHeights, Index, Counter2);
            ParamsString = StrConcat12(ParamsString, Translate(","), Equation, Translate(","), Height, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
          }
        }
        if (Counter != NumInputPlateTypes)
        {
          ParamsString = StrConcat2(ParamsString, Translate(","));
        }
      }
    }
    RootPath = SCRIPT::GetConfigurationRootPath();
    InputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Input.txt"));
    File.AddField(1, ParamsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(InputFile, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, InputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.WriteRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    PythonScript = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\CalculateVolumeHeight.py"));
    RunnableCommand = SCRIPT::GeneratePythonScriptCommand(PythonScript, Translate(""), Translate("True"));
    Util::SyncShell(RunnableCommand, 2, _Temp);
    OutputFile = StrConcat2(RootPath, Translate("\\Modules\\Pipette\\HelperScripts\\CalculateVolumeHeight\\Output.txt"));
    File.AddField(1, CalculatedHeightsString, hslString);
    File.SetDelimiter(hslAsciiText);
    if( 0 == File.Open(OutputFile, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, OutputFile, "HxMetEdCompCmd");
    }
    if( 0 == File.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != File.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    File.RemoveFields();
    TOOLS::ParseDelimitedList(Translate(","), CalculatedHeightsString, o_CalculatedHeights);
    return (Translate("True"));
  }
} // library namespace
