#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Transport\\Configuration\\Transport Config.hs_"
#include "HSLExtensions\\Array2D.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRANSPORT {
  sequence GripperSequence;
  private function CoreTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType, variable Park, variable CheckExists ) void ;
  function Init( sequence & GripperToolSequence ) void ;
  function MoveLabware( device & ML_Star, variable LabwareSourceType, variable SourceSequenceString, variable LabwareDestinationType, variable DestinationSequenceString, variable Park, variable CheckExists ) variable ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    TRANSPORT_CONFIG::_InitLibrary();
  }
  function _ExitLibrary() {
    TRANSPORT_CONFIG::_ExitLibrary();
  }

  function Init( sequence & GripperToolSequence ) void {
    TRANSPORT_CONFIG::Init();
    SeqCopySequence(GripperSequence, GripperToolSequence);
  }

  function MoveLabware( device & ML_Star, variable LabwareSourceType, variable SourceSequenceString, variable LabwareDestinationType, variable DestinationSequenceString, variable Park, variable CheckExists ) variable {
    private variable TranportType;
    private variable NumTransportableLabware;
    private variable Counter;
    private variable Counter2;
    private variable NumTransportTypes;
    private variable TransportableLabwareArray[];
    private variable TransportTypes[];
    private variable TransportableLabwares[];
    private variable Counter3;
    private variable TransportType;
    private sequence SourceSequence;
    private sequence DestinationSequence;
    DevGetSequenceRef(ML_Star, SourceSequenceString, SourceSequence);
    DevGetSequenceRef(ML_Star, DestinationSequenceString, DestinationSequence);
    NumTransportTypes = TRANSPORT_CONFIG::GetNumTransportTypes();
    TRANSPORT_CONFIG::GetTransportTypes(TransportTypes);
    TRANSPORT_CONFIG::GetTransportableLabwares(TransportableLabwares);
    TranportType = 0;
    {
      for(Counter = 0; Counter < NumTransportTypes;)
      {
        Counter = Counter + 1;
        TransportableLabwareArray = HSLExtensions::Array2D::GetColumn(TransportableLabwares, Counter);
        NumTransportableLabware=TransportableLabwareArray.GetSize();
        {
          for(Counter2 = 0; Counter2 < NumTransportableLabware;)
          {
            Counter2 = Counter2 + 1;
            if (TransportableLabwareArray.ElementAt( Counter2 -1) == LabwareSourceType)
            {
              {
                for(Counter3 = 0; Counter3 < NumTransportableLabware;)
                {
                  Counter3 = Counter3 + 1;
                  if (TransportableLabwareArray.ElementAt( Counter3 -1) == LabwareDestinationType)
                  {
                    if (TransportTypes.ElementAt( Counter -1) == "CORE")
                    {
                      CoreTransport(ML_Star, SourceSequence, DestinationSequence, Counter, Counter2, Park, CheckExists);
                    }
                    if (TransportTypes.ElementAt( Counter -1) == "ISwap")
                    {
                    }
                    return (Translate("True"));
                  }
                }
              }
            }
          }
        }
      }
    }
    return (Translate("False"));
  }

  private function CoreTransport( device & ML_Star, sequence SourceSequence, sequence DestinationSequence, variable TransportType, variable LabwareType, variable Park, variable CheckExists ) void {
    private variable ISwapExists;
    private variable LabwareGripCloseWidths[];
    private variable LabwareGripHeights[];
    private variable LabwareGripOpenWidths[];
    private variable GripHeight;
    private variable CloseWidth;
    private variable OpenWidth;
    private variable LabwareGripOpenWidthsArray[];
    private variable LabwareGripHeightsArray[];
    private variable LabwareGripCloseWidthsArray[];
    private variable CheckExistsBefore;
    private variable CheckExistsAfter;
    if (CheckExists == "False")
    {
      CheckExistsBefore = 0;
      CheckExistsAfter = 0;
    }
    else
    {
      if (CheckExists == "Before")
      {
        CheckExistsBefore = 1;
      }
      if (CheckExists == "After")
      {
        CheckExistsAfter = 1;
      }
      if (CheckExists == "Both")
      {
        CheckExistsAfter = 1;
        CheckExistsBefore = 1;
      }
    }
    if (Park == "True")
    {
      Park = 1;
    }
    else
    {
      Park = 0;
    }
    ISwapExists = TRANSPORT_CONFIG::GetISwapExists();
    TRANSPORT_CONFIG::GetLabwareGripCloseWidths(LabwareGripCloseWidths);
    TRANSPORT_CONFIG::GetLabwareGripOpenWidths(LabwareGripOpenWidths);
    TRANSPORT_CONFIG::GetLabwareGripHeights(LabwareGripHeights);
    LabwareGripCloseWidthsArray = HSLExtensions::Array2D::GetColumn(LabwareGripCloseWidths, TransportType);
    LabwareGripOpenWidthsArray = HSLExtensions::Array2D::GetColumn(LabwareGripOpenWidths, TransportType);
    LabwareGripHeightsArray = HSLExtensions::Array2D::GetColumn(LabwareGripHeights, TransportType);
    CloseWidth=LabwareGripCloseWidthsArray.GetAt(LabwareType-1);
    OpenWidth=LabwareGripCloseWidthsArray.GetAt(LabwareType-1);
    GripHeight=LabwareGripHeightsArray.GetAt(LabwareType-1);
    ML_Star._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_Star._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
} // library namespace
